---
API: 3
OpenSesame: 4.0.24
Platform: nt
---
set width 1920
set title "Attentional spatial bias"
set subject_parity even
set subject_nr 0
set start full_experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "D:\\Uni\\5. Semester\\Acquisition and analysis of eye-tracking data\\EyeTracking_Projekt\\experiment"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#3d3846"

define pygaze_init calibration
	set tracker_type "Advanced dummy (mouse simulation)"
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initializes and calibrates the eye tracker"
	set calibrate yes
	set calbeep yes
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define sketchpad exit
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="Thank you for participating at our Eye Tracking Experiment." x=0 y=0 z_index=0

define sequence first_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_pygaze_log True
	run fixation_point_inline_script True
	run image_pygaze_log True
	run image_inline_script True
	run triangle_count_script True
	run pause_and_recalibration_inline_script True
	run new_pygaze_log True

define loop first_trial_loop
	set source_file "subject_1.csv"
	set source file
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 condition normal
	setcycle 0 trial_number 1
	setcycle 1 condition normal
	setcycle 1 trial_number 2
	setcycle 2 condition normal
	setcycle 2 trial_number 3
	setcycle 3 condition normal
	setcycle 3 trial_number 4
	setcycle 4 condition normal
	setcycle 4 trial_number 5
	setcycle 5 condition normal
	setcycle 5 trial_number 6
	setcycle 6 condition normal
	setcycle 6 trial_number 7
	setcycle 7 condition normal
	setcycle 7 trial_number 8
	setcycle 8 condition normal
	setcycle 8 trial_number 9
	setcycle 9 condition size
	setcycle 9 trial_number 10
	setcycle 10 condition size
	setcycle 10 trial_number 11
	setcycle 11 condition size
	setcycle 11 trial_number 12
	setcycle 12 condition size
	setcycle 12 trial_number 13
	setcycle 13 condition size
	setcycle 13 trial_number 14
	setcycle 14 condition size
	setcycle 14 trial_number 15
	setcycle 15 condition size
	setcycle 15 trial_number 16
	setcycle 16 condition size
	setcycle 16 trial_number 17
	setcycle 17 condition size
	setcycle 17 trial_number 18
	setcycle 18 condition form
	setcycle 18 trial_number 19
	setcycle 19 condition form
	setcycle 19 trial_number 20
	setcycle 20 condition form
	setcycle 20 trial_number 21
	setcycle 21 condition form
	setcycle 21 trial_number 22
	setcycle 22 condition form
	setcycle 22 trial_number 23
	setcycle 23 condition form
	setcycle 23 trial_number 24
	setcycle 24 condition form
	setcycle 24 trial_number 25
	setcycle 25 condition form
	setcycle 25 trial_number 26
	setcycle 26 condition form
	setcycle 26 trial_number 27
	setcycle 27 condition background
	setcycle 27 trial_number 28
	setcycle 28 condition background
	setcycle 28 trial_number 29
	setcycle 29 condition background
	setcycle 29 trial_number 30
	setcycle 30 condition background
	setcycle 30 trial_number 31
	setcycle 31 condition background
	setcycle 31 trial_number 32
	setcycle 32 condition background
	setcycle 32 trial_number 33
	setcycle 33 condition background
	setcycle 33 trial_number 34
	setcycle 34 condition background
	setcycle 34 trial_number 35
	setcycle 35 condition background
	setcycle 35 trial_number 36
	run first_sequence

define inline_script fixation_point_inline_script
	set description "Executes Python code"
	___run__
	import math
	
	timeout = 10000
	required_fixation_time = 2000
	center = (var.width//2, var.height//2)
	
	# Show fixation cross
	canvas = Canvas()
	canvas.fixdot()
	canvas.show()
	
	# Wait for the fixation on the fixation cross
	t0 = clock.time()
	fixated = False
	initial_fixation_time = -1
	currently_fixated = False
	while not fixated and clock.time() - t0 < timeout:
	    x, y = eyetracker.sample()
	    dist = math.sqrt((x - center[0])**2 + (y - center[1])**2)
	    if dist < 100 and not currently_fixated:
	        initial_fixation_time = clock.time()
	        currently_fixated = True
	    if currently_fixated:
	        if dist < 100 and clock.time() - initial_fixation_time > required_fixation_time:
	            fixated = True
	        if dist > 100:
	            currently_fixated = False
	    
	# Calibrate eye tracker if subject was not able to fixate the point 
	if not fixated:
	        eyetracker.calibrate()
	__end__
	set _prepare ""

define pygaze_log fixation_pygaze_log
	set throttle 10
	set msg fixation_log
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define sequence full_experiment
	set flush_keyboard yes
	set description "Führt eine Anzahl von Elementen in einer Sequenz aus"
	run welcome True
	run calibration True
	run instructions True
	run triangle_instruction True
	run pygaze_start_recording True
	run triangle_count_init True
	run first_trial_loop True
	run pygaze_stop_recording True
	run logger True
	run exit True

define inline_script image_inline_script
	set description "Executes Python code"
	___run__
	from PIL import Image
	import random
	
	print('trial: ', var.trial_number)
	
	# Canvas erstellen
	canvas = Canvas()
	
	# hide triangles in random spots
	TRIANGLE_PROBABILITY = 0.6
	
	def draw_universal_triangle(canvas, img_path, x_offset, scale=0.5, is_asym=False):
	    try:
	        if random.random() > TRIANGLE_PROBABILITY:
	            return
	            
	        with Image.open(pool[img_path]) as img:
	            orig_w, orig_h = img.size
	        
	        disp_w = orig_w * scale
	        disp_h = orig_h * scale
	        
	        tri_h, tri_w = 2, 3
	        
	        safe_ratio = 0.6 if is_asym else 0.8
	        safe_w = disp_w * safe_ratio
	        safe_h = disp_h * safe_ratio
	        
	        min_size = max(tri_w, tri_h) * 3
	        safe_w = max(safe_w, min_size)
	        safe_h = max(safe_h, min_size)
	        
	        x = random.uniform(x_offset - safe_w/2 + tri_w, x_offset + safe_w/2 - tri_w)
	        y = random.uniform(-safe_h/2 + tri_h, safe_h/2 - tri_h)
	        
	        canvas.polygon([
	            (x, y - tri_h),
	            (x - tri_w/2, y),
	            (x + tri_w/2, y)
	        ], fill=True, color='red')
	        
	        var.triangle_count += 1
	    except:
	        pass
	
	if var.attribute == "none":
	    canvas.image(pool[var.img_left], scale=0.5, x=-384, y=0)
	    canvas.image(pool[var.img_right], scale=0.5, x=384, y=0)
	    draw_universal_triangle(canvas, var.img_left, -384)
	    draw_universal_triangle(canvas, var.img_right, 384)
	
	elif var.attribute == "size":
	    scales = [0.5, 0.5]
	    target_index = 0 if var.target_image == 'img_left' else 1
	    target_size = 0.25 if var.value == 'small' else 0.75
	    scales[target_index] = target_size
	    
	    canvas.image(pool[var.img_left], scale=scales[0], x=-384, y=0)
	    canvas.image(pool[var.img_right], scale=scales[1], x=384, y=0)
	    draw_universal_triangle(canvas, var.img_left, -384, scales[0])
	    draw_universal_triangle(canvas, var.img_right, 384, scales[1])
	
	elif var.attribute == "form":
	    if var.target_image == 'img_left':
	        if var.value == 'asymmetrical':
	            asym_path = os.path.join(self.experiment.experiment_path, "asym_left.png")
	            canvas.image(asym_path, scale=0.5, x=-384, y=0)
	            canvas.image(pool[var.img_right], scale=0.5, x=384, y=0)
	            draw_universal_triangle(canvas, var.img_left, -384, 0.5, True)
	            draw_universal_triangle(canvas, var.img_right, 384)
	        else:
	            sym_path = os.path.join(self.experiment.experiment_path, "sym_left.png")
	            canvas.image(sym_path, scale=0.5, x=-384, y=0)
	            canvas.image(pool[var.img_right], scale=0.5, x=384, y=0)
	            draw_universal_triangle(canvas, var.img_left, -384, 0.5, True)
	            draw_universal_triangle(canvas, var.img_right, 384)
	    else:
	        if var.value == 'asymmetrical':
	            asym_path = os.path.join(self.experiment.experiment_path, "asym_right.png")
	            canvas.image(pool[var.img_left], scale=0.5, x=-384, y=0)
	            canvas.image(asym_path, scale=0.5, x=384, y=0)
	            draw_universal_triangle(canvas, var.img_left, -384)
	            draw_universal_triangle(canvas, var.img_right, 384, 0.5, True)
	        else:
	            sym_path = os.path.join(self.experiment.experiment_path, "sym_right.png")
	            canvas.image(pool[var.img_left], scale=0.5, x=-384, y=0)
	            canvas.image(sym_path, scale=0.5, x=384, y=0)
	            draw_universal_triangle(canvas, var.img_left, -384)
	            draw_universal_triangle(canvas, var.img_right, 384, 0.5, True)
	
	elif var.attribute == "background":
	    canvas.rect(x=-960, y=-600, w=1920, h=1200, fill=True, color=var.bg_color)
	    canvas.image(pool[var.img_left], scale=0.5, x=-384, y=0)
	    canvas.image(pool[var.img_right], scale=0.5, x=384, y=0)
	    draw_universal_triangle(canvas, var.img_left, -384)
	    draw_universal_triangle(canvas, var.img_right, 384)
	
	# Anzeigen für 4 Sekunden
	canvas.show()
	clock.sleep(4000)
	__end__
	___prepare__
	import random
	from PIL import Image, ImageDraw
	from imagedominantcolor import DominantColor
	import os
	import math
	
	def get_dominant_color(image_path):
	    domCol = DominantColor(image_path)
	    return domCol.rgb
	
	def get_complementary_color(image_path):
	    domCol = DominantColor(image_path)
	    r, g, b = domCol.rgb
	    return (255 - r, 255 - g, 255 - b)
	
	def apply_asymmetric_mask_and_save(input_path, output_path):
	    im = Image.open(input_path).convert("RGBA")
	    width, height = im.size
	    center_x, center_y = width // 2, height // 2
	    radius = min(width, height) * 0.45
	
	    num_points = random.randint(7, 10)
	    angle_step = 360 / num_points
	    irregularity = 0.4
	    spikiness = 0.3
	
	    angles = []
	    for i in range(num_points):
	        angle = i * angle_step + random.uniform(-angle_step * irregularity, angle_step * irregularity)
	        angles.append(angle % 360)
	
	    polygon = []
	    for angle in sorted(angles):
	        rad = math.radians(angle)
	        r = radius * (1 + random.uniform(-spikiness, spikiness))
	        x = center_x + int(r * math.cos(rad))
	        y = center_y + int(r * math.sin(rad))
	        polygon.append((x, y))
	
	    mask = Image.new('L', (width, height), 0)
	    draw = ImageDraw.Draw(mask)
	    draw.polygon(polygon, fill=255)
	
	    im.putalpha(mask)
	    im.save(output_path)
	
	def apply_symmetrical_mask_and_save(input_path, output_path):
	    im = Image.open(input_path).convert("RGBA")
	    width, height = im.size
	    center_x, center_y = width // 2, height // 2
	    radius = min(width, height) * 0.48
	
	    num_waves = random.choice([4, 5, 6])
	    modulation_strength = 0.08
	
	    polygon = []
	    for i in range(360):
	        angle_rad = math.radians(i)
	        mod_radius = radius * (1 + modulation_strength * math.sin(num_waves * angle_rad))
	        x = center_x + int(mod_radius * math.cos(angle_rad))
	        y = center_y + int(mod_radius * math.sin(angle_rad))
	        polygon.append((x, y))
	
	    mask = Image.new('L', (width, height), 0)
	    draw = ImageDraw.Draw(mask)
	    draw.polygon(polygon, fill=255)
	
	    im.putalpha(mask)
	    im.save(output_path)
	
	# Vorberechnungen für alle Bedingungen
	if var.attribute == "form":
	    if var.target_image == 'img_left':
	        if var.value == 'asymmetrical':
	            asym_path = os.path.join(self.experiment.experiment_path, "asym_left.png")
	            apply_asymmetric_mask_and_save(pool[var.img_left], asym_path)
	        else:
	            sym_path = os.path.join(self.experiment.experiment_path, "sym_left.png")
	            apply_symmetrical_mask_and_save(pool[var.img_left], sym_path)
	    else:
	        if var.value == 'asymmetrical':
	            asym_path = os.path.join(self.experiment.experiment_path, "asym_right.png")
	            apply_asymmetric_mask_and_save(pool[var.img_right], asym_path)
	        else:
	            sym_path = os.path.join(self.experiment.experiment_path, "sym_right.png")
	            apply_symmetrical_mask_and_save(pool[var.img_right], sym_path)
	
	elif var.attribute == "background":
	    img_left_path = pool[var.img_left]
	    img_right_path = pool[var.img_right]
	    
	    if var.target_image == 'img_left':
	        if var.value == 'dominant':
	            rgb_color = get_dominant_color(img_left_path)
	        else:
	            rgb_color = get_complementary_color(img_left_path)
	    else:
	        if var.value == 'dominant':
	            rgb_color = get_dominant_color(img_right_path)
	        else:
	            rgb_color = get_complementary_color(img_right_path)
	    
	    # Konvertiere RGB-Tupel in Hex-String (z.B. "#FF0000" für Rot)
	    var.bg_color = '#%02x%02x%02x' % rgb_color
	__end__

define pygaze_log image_pygaze_log
	set throttle 10
	set msg "Trial [trial_number]: [cb_index], left image: [img_left], right image: [img_right]"
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define sketchpad instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=42 html=yes show_if=True text="Instructions – Eye-Tracking Experiment<br /><br />- Two images will be displayed side by side.<br />- Count the small triangles you see in the images.<br />- Remember the total number.<br />- Look carefully at both images and let your eyes move naturally.<br />" x=-590 y=-174 z_index=0

define logger logger
	set description "Protokolliert experimentelle Daten"
	set auto_log yes

define form_base new_1_form_base
	set timeout infinite
	set spacing 10
	set rows "1;1"
	set only_render no
	set margins "50;50;50;50"
	set description "A generic form plug-in"
	set cols 1
	set _theme gray
	widget 0 0 1 1 text_input return_accepts=True var=triangle_count
	widget 0 1 1 1 button text=Continue


define form_base new_form_base
	set timeout infinite
	set spacing 10
	set rows "1;1;1"
	set only_render no
	set margins "50;50;50;50"
	set description "A generic form plug-in"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label font_family=serif font_size=32 halign=center text="How many triangles did you see in the images?"
	widget 0 1 1 1 text_input return_accepts=True var=triangle_count
	widget 0 2 1 1 button text=Continue


define form_text_input new_form_text_input
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title Title
	set form_question "How many triangles did you see in the images?"
	set description "A generic form plug-in"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="{form_title}"
	widget 0 1 1 1 label center=no text="{form_question}"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="{form_var}"


define pygaze_log new_pygaze_log
	set throttle 10
	set msg "Trial [trial_number]: end"
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define sketchpad new_sketchpad
	set duration keypress
	set description "Stimuli anzeigen"

define inline_script pause_and_recalibration_inline_script
	set description "Führt Python-Code aus"
	___run__
	number_of_trails_between_pasue = 20
	
	if var.trial_number % 3 == 0:
	    canvas = Canvas()
	    keyboard = Keyboard()
	    canvas.text('You can take a break if you want.\n After your continue the eye tracker will be recalibrated.\n If you want to continue press any button.\n\n Please continue counting the red triangles. \n', font_size=42)
	    canvas.show()
	    eyetracker.calibrate()
	    
	__end__
	set _prepare ""

define pygaze_start_recording pygaze_start_recording
	set status_msg start_trial
	set description ""

define pygaze_stop_recording pygaze_stop_recording
	set status_msg stop_trial
	set description ""

define inline_script triangle_count_init
	set description "Führt Python-Code aus"
	set _run "var.triangle_count = 0"
	set _prepare ""

define inline_script triangle_count_script
	set description "Führt Python-Code aus"
	___run__
	#from openexp.canvas import canvas
	from libopensesame import widgets
	
	if var.trial_number % 3 == 0:
	    # Formular erzeugen
	    form = widgets.form(self.experiment, cols=[1], rows=[1, 1, 1])
	    
	    # Eingabefeld definieren
	    input_text = widgets.text_input(form, var='user_input', stub='...')
	    
	    # Elemente zum Formular hinzufügen
	    form.set_widget(widgets.label(form, text="Please type how many red triangles you have counted:"), (0, 0))
	    form.set_widget(input_text, (0, 1))
	    form.set_widget(widgets.button(form, text='Weiter'), (0, 2))
	    
	    # Formular anzeigen und auf Weiter klicken warten
	    form._exec()
	    
	    log.write(f'Trial Number: {trial_number}, Triangles counted: {var.user_input}, real number: {var.triangle_count}')
	    var.triangle_count = 0
	__end__
	set _prepare ""

define sketchpad triangle_instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=42 html=yes show_if=True text="Search for small red triangles in the following images <br />and count how many you can find<br /><br />" x=0 y=0 z_index=0

define sketchpad triangle_response
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=42 html=yes show_if=True text="How many triangles did you see in the images?<br />" x=0 y=0 z_index=0

define pygaze_log triangles_count_log
	set throttle 10
	__msg__
	Triangles counted: [user_input]
	real Triangles number: [triangle_count]
	__end__
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Stimuli anzeigen"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="Welcome to our Eye Tracking Experiment. <br />(Press any key to continue)<br />" x=0 y=0 z_index=0

