---
API: 3
OpenSesame: 4.0.24
Platform: nt
---
set width 1920
set title "Attentional spatial bias"
set subject_parity even
set subject_nr 0
set start full_experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:\\Users\\Franzi\\Downloads"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#3d3846"

define sketchpad break_recalibration
	set duration keypress
	set description "Displays stimuli"

define pygaze_init calibration
	set tracker_type "Advanced dummy (mouse simulation)"
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initializes and calibrates the eye tracker"
	set calibrate yes
	set calbeep yes
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define sketchpad exit
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="Thank you for participating at our Eye Tracking Experiment." x=0 y=0 z_index=0

define sequence first_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_pygaze_log True
	run fixation_point_inline_script True
	run image_pygaze_log True
	run image_inline_script True

define loop first_trial_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 condition normal
	setcycle 0 trial_number 1
	setcycle 1 condition normal
	setcycle 1 trial_number 2
	setcycle 2 condition normal
	setcycle 2 trial_number 3
	setcycle 3 condition normal
	setcycle 3 trial_number 4
	setcycle 4 condition normal
	setcycle 4 trial_number 5
	setcycle 5 condition normal
	setcycle 5 trial_number 6
	setcycle 6 condition normal
	setcycle 6 trial_number 7
	setcycle 7 condition normal
	setcycle 7 trial_number 8
	setcycle 8 condition normal
	setcycle 8 trial_number 9
	setcycle 9 condition size
	setcycle 9 trial_number 10
	setcycle 10 condition size
	setcycle 10 trial_number 11
	setcycle 11 condition size
	setcycle 11 trial_number 12
	setcycle 12 condition size
	setcycle 12 trial_number 13
	setcycle 13 condition size
	setcycle 13 trial_number 14
	setcycle 14 condition size
	setcycle 14 trial_number 15
	setcycle 15 condition size
	setcycle 15 trial_number 16
	setcycle 16 condition size
	setcycle 16 trial_number 17
	setcycle 17 condition size
	setcycle 17 trial_number 18
	setcycle 18 condition form
	setcycle 18 trial_number 19
	setcycle 19 condition form
	setcycle 19 trial_number 20
	setcycle 20 condition form
	setcycle 20 trial_number 21
	setcycle 21 condition form
	setcycle 21 trial_number 22
	setcycle 22 condition form
	setcycle 22 trial_number 23
	setcycle 23 condition form
	setcycle 23 trial_number 24
	setcycle 24 condition form
	setcycle 24 trial_number 25
	setcycle 25 condition form
	setcycle 25 trial_number 26
	setcycle 26 condition form
	setcycle 26 trial_number 27
	setcycle 27 condition background
	setcycle 27 trial_number 28
	setcycle 28 condition background
	setcycle 28 trial_number 29
	setcycle 29 condition background
	setcycle 29 trial_number 30
	setcycle 30 condition background
	setcycle 30 trial_number 31
	setcycle 31 condition background
	setcycle 31 trial_number 32
	setcycle 32 condition background
	setcycle 32 trial_number 33
	setcycle 33 condition background
	setcycle 33 trial_number 34
	setcycle 34 condition background
	setcycle 34 trial_number 35
	setcycle 35 condition background
	setcycle 35 trial_number 36
	run first_sequence

define inline_script fixation_point_inline_script
	set description "Executes Python code"
	___run__
	import math
	
	timeout = 10000
	required_fixation_time = 2000
	center = (var.width//2, var.height//2)
	print('center: ', center)
	
	# Show fixation cross
	canvas = Canvas()
	canvas.fixdot()
	canvas.show()
	
	# Wait for the fixation on the fixation cross
	t0 = clock.time()
	fixated = False
	initial_fixation_time = -1
	currently_fixated = False
	while not fixated and clock.time() - t0 < timeout:
	    x, y = eyetracker.sample()
	    dist = math.sqrt((x - center[0])**2 + (y - center[1])**2)
	    if dist < 100 and not currently_fixated:
	        initial_fixation_time = clock.time()
	        currently_fixated = True
	    if currently_fixated:
	        if dist < 100 and clock.time() - initial_fixation_time > required_fixation_time:
	            fixated = True
	        if dist > 100:
	            currently_fixated = False
	    
	# Calibrate eye tracker if subject was not able to fixate the point 
	if not fixated:
	        eyetracker.calibrate()
	__end__
	set _prepare ""

define pygaze_log fixation_pygaze_log
	set throttle 10
	set msg fixation_log
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define sequence full_experiment
	set flush_keyboard yes
	set description "Führt eine Anzahl von Elementen in einer Sequenz aus"
	run welcome True
	run calibration True
	run instructions True
	run pygaze_start_recording True
	run first_trial_loop True
	run pygaze_stop_recording True
	run logger True
	run exit True

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad image
	set duration 7500
	set description "Stimuli anzeigen"
	draw image center=1 file="[img_left]" scale=0.5 show_if=True x=-480 y=0 z_index=0
	draw image center=1 file="[img_right]" scale=0.5 show_if=True x=480 y=0 z_index=0

define advanced_delay image_delay
	set jitter_mode Uniform
	set jitter 0
	set duration 42
	set description "A random delay sampled from either a normal or uniform distribution"

define inline_script image_inline_script
	set description "Executes Python code"
	___run__
	import random
	from PIL import Image, ImageDraw
	import os
	
	def get_dominant_color(image_path):
	    image = Image.open(image_path).convert('RGB')
	    image = image.resize((50, 50))  # Speed up by resizing
	    pixels = list(image.getdata())
	    avg_color = tuple(sum(c) // len(c) for c in zip(*pixels))
	    return avg_color
	
	def get_complementary_color(rgb):
	    r, g, b = rgb
	    return (255 - r, 255 - g, 255 - b)
	
	def apply_circle_mask_and_save(input_path, output_path):
	    im = Image.open(input_path).convert("RGBA")
	    size = im.size
	
	    mask = Image.new('L', size, 0)
	    draw = ImageDraw.Draw(mask)
	    draw.ellipse((0, 0, size[0], size[1]), fill=255)
	
	    im.putalpha(mask)
	    im.save(output_path)
	    
	filenames = [f for f in self.experiment.pool.files()]
	
	print('test')
	print(filenames)
	
	# Pick two random, distinct images
	img_left, img_right = random.sample(filenames, 2)
	
	# Store in experiment variables
	var.img_left = img_left
	var.img_right = img_right
	
	# Create a canvas
	canvas = Canvas()
	
	if condition == "normal":
	    # Draw the image with scaling (e.g., 0.5 = 50% of original size)
	    canvas.image(pool[var.img_left], scale=0.5, x = -384, y=0)
	    canvas.image(pool[var.img_right], scale=0.5, x = 384, y=0)
	elif condition == "size":
	    # Randomly pick which image gets scale 0.5
	    index_for_05 = random.choice([0, 1])
	    
	    # Assign scales accordingly
	    scales = [None, None]
	    scales[index_for_05] = 0.5
	    # The other image gets either 0.25 or 0.75 randomly
	    other_index = 1 - index_for_05
	    scales[other_index] = random.choice([0.25, 0.75])
	    canvas.image(pool[var.img_left], scale=scales[0], x = -384, y=0)
	    canvas.image(pool[var.img_right], scale=scales[1], x = 384, y=0)
	    
	if condition == "form":
	    round_on_left = random.choice([True, False])
	
	    if round_on_left:
	        # Left = round
	        rounded_path = os.path.join(self.experiment.experiment_path, "rounded_left.png")
	        apply_circle_mask_and_save(pool[var.img_left], rounded_path)
	        canvas.image(rounded_path, scale=0.5, x=-384, y=0)
	        canvas.image(pool[var.img_right], scale=0.5, x=384, y=0)
	    else:
	        # Right = round
	        rounded_path = os.path.join(self.experiment.experiment_path, "rounded_right.png")
	        apply_circle_mask_and_save(pool[var.img_right], rounded_path)
	        canvas.image(pool[var.img_left], scale=0.5, x=-384, y=0)
	        canvas.image(rounded_path, scale=0.5, x=384, y=0)
	
	
	elif condition == "background":
	    # Get paths to images
	    img_left_path = pool[var.img_left]
	    img_right_path = pool[var.img_right]
	
	    # Calculate dominant colors
	    dominant_left = get_dominant_color(img_left_path)
	    dominant_right = get_dominant_color(img_right_path)
	    
	    # Randomly pick one as background color
	    random_bg= random.choice([dominant_left, dominant_right])
	    
	    #Calculate complementary colors
	    bg_color = get_complementary_color(random_bg)
	
	
	    # Create canvas and fill background
	    canvas.rect(x=-960, y=-600, w=1920, h=1200, fill=True, color=bg_color)
	
	    # Draw images
	    canvas.image(pool[var.img_left], scale=0.5, x=-384, y=0)
	    canvas.image(pool[var.img_right], scale=0.5, x=384, y=0)
	
	
	# Show the canvas for 7000 ms (7 seconds)
	canvas.show()
	clock.sleep(7000)
	__end__
	set _prepare ""

define inline_script image_inline_script_old
	set description "Führt Python-Code aus"
	___run__
	from PIL import Image, ImageDraw
	from openexp.canvas import canvas
	import os
	import random
	
	# Hilfsfunktion: Formmaske anwenden
	def apply_mask(img, form):
	    w, h = img.size
	    mask = Image.new('L', img.size, 0)
	    draw = ImageDraw.Draw(mask)
	
	    if form == "kreis":
	        draw.ellipse((0, 0, w, h), fill=255)
	    elif form == "dreieck":
	        draw.polygon([(w // 2, 0), (0, h), (w, h)], fill=255)
	    elif form == "ellipse":
	        draw.ellipse((w // 4, 0, 3 * w // 4, h), fill=255)
	    elif form == "rechteck_gerundet":
	        draw.rounded_rectangle((0, 0, w, h), radius=min(w, h) // 5, fill=255)
	    elif form == "keine":
	        return img
	    else:
	        raise ValueError(f"Unbekannte Form: {form}")
	
	    img.putalpha(mask)
	    return img
	
	# Bildpfade und Formen aus Variablen
	image1 = var.image_file1
	image2 = var.image_file2
	form1 = var.form1.lower()
	form2 = var.form2.lower()
	
	# Bildpfade holen
	try:
	    pfad1 = exp.pool[image1]
	    pfad2 = exp.pool[image2]
	except:
	    raise RuntimeError("Mindestens ein Bild nicht im Dateipool gefunden.")
	
	# Bilder laden und zuschneiden
	bild1 = apply_mask(Image.open(pfad1).convert("RGBA"), form1)
	bild2 = apply_mask(Image.open(pfad2).convert("RGBA"), form2)
	
	# Temporäre Dateien speichern
	temp1 = os.path.join(os.path.dirname(pfad1), "temp1.png")
	temp2 = os.path.join(os.path.dirname(pfad2), "temp2.png")
	bild1.save(temp1)
	bild2.save(temp2)
	
	# Positionen
	x1, y1 = float(var.x1), float(var.y1)
	x2, y2 = float(var.x2), float(var.y2)
	
	# Zufällige Hintergrundfarbe
	r = random.randint(0, 255)
	g = random.randint(0, 255)
	b = random.randint(0, 255)
	bg_color = f'rgb({r},{g},{b})'
	
	# Canvas erzeugen
	c = canvas(exp)
	
	# Bildschirmgröße korrekt auslesen
	screen_w = var.width
	screen_h = var.height
	
	# Hintergrundrechteck zeichnen (ganzer Bildschirm)
	c.rect(
	    x=-screen_w // 2,
	    y=-screen_h // 2,
	    w=screen_w,
	    h=screen_h,
	    fill=True,
	    color=bg_color
	)
	
	# Bilder anzeigen
	c.image(temp1, x=x1, y=y1, scale=0.5)
	c.image(temp2, x=x2, y=y2, scale=0.5)
	c.show()
	
	# Pause
	exp.clock.sleep(5000)
	__end__
	set _prepare ""

define pygaze_log image_pygaze_log
	set throttle 10
	set msg image_log
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define advanced_delay image_stimulus_delay
	set jitter_mode Uniform
	set jitter 0
	set duration 7000
	set description "A random delay sampled from either a normal or uniform distribution"

define sketchpad instruction
	set duration keypress
	set description "Stimuli anzeigen"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=42 html=yes show_if=True text="" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=42 html=yes show_if=True text="[instruction_txt]" x=-32 y=0 z_index=0

define sketchpad instruction_1
	set duration keypress
	set description "Stimuli anzeigen"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=42 html=yes show_if=True text="" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=42 html=yes show_if=True text="[instruction_txt]" x=-32 y=0 z_index=0

define sketchpad instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=42 html=yes show_if=True text="Instruction text" x=0 y=0 z_index=0

define logger logger
	set description "Protokolliert experimentelle Daten"
	set auto_log yes

define advanced_delay new_1_advanced_delay
	set jitter_mode Uniform
	set jitter 0
	set duration 42
	set description "A random delay sampled from either a normal or uniform distribution"

define pygaze_log new_1_pygaze_log
	set throttle 2
	set msg image_log
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_start_recording new_1_pygaze_start_recording
	set status_msg start_trial
	set description "Puts the eye tracker out of recording mode"

define pygaze_stop_recording new_1_pygaze_stop_recording
	set status_msg stop_trial
	set description ""

define keyboard_response new_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define logger new_logger
	set description "Protokolliert experimentelle Daten"
	set auto_log yes

define pygaze_drift_correct new_pygaze_drift_correct
	set ypos 0
	set xpos 0
	set target_style default
	set target_color "[foreground]"
	set fixation_triggered no
	set draw_target yes
	set description "Performs eye-tracker drift correction"

define sequence new_sequence
	set flush_keyboard yes
	set description "Führt eine Anzahl von Elementen in einer Sequenz aus"
	run new_1_pygaze_start_recording True
	run instruction_1 True
	run image True
	run new_1_pygaze_log True
	run new_1_advanced_delay True
	run new_1_pygaze_stop_recording True
	run new_logger True

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="[img_left]" scale=1 show_if=True x=0 y=0 z_index=0

define pygaze_log pygaze_log
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_start_recording pygaze_start_recording
	set status_msg start_trial
	set description ""

define pygaze_stop_recording pygaze_stop_recording
	set status_msg stop_trial
	set description ""

define pygaze_init recalibration
	set tracker_type "Advanced dummy (mouse simulation)"
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initializes and calibrates the eye tracker"
	set calibrate yes
	set calbeep yes
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define loop second_trial_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 5
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	setcycle 1 empty_column ""
	setcycle 2 empty_column ""
	setcycle 3 empty_column ""
	setcycle 4 empty_column ""
	run ""

define sketchpad stimulus
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[img_left]" scale=0.5 show_if=True x=-384 y=0 z_index=0
	draw image center=1 file="[img_right]" scale=0.5 show_if=True x=384 y=0 z_index=0

define loop trial_loop_advanced
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Führt wiederholt ein anderes Element aus"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 image1 "F001.png"
	setcycle 0 image2 "F003.png"
	setcycle 1 image1 "F002.png"
	setcycle 1 image2 "F005.png"
	setcycle 2 image1 "F003.png"
	setcycle 2 image2 "F006.png"
	setcycle 3 image1 "F004.png"
	setcycle 3 image2 "F007.png"
	setcycle 4 image1 "F005.png"
	setcycle 4 image2 "F008.png"
	setcycle 5 image1 "F006.png"
	setcycle 5 image2 "F001.png"
	setcycle 6 image1 "F007.png"
	setcycle 6 image2 "F002.png"
	setcycle 7 image1 "F008.png"
	setcycle 7 image2 "F004.png"
	run trial_sequence

define loop trial_loop_basic
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Führt wiederholt ein anderes Element aus"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_txt "Which image is more beautiful?"
	setcycle 0 image_file1 "F001.png"
	setcycle 0 image_file2 "F003.png"
	setcycle 1 instruction_txt "Try to memories this images"
	setcycle 1 image_file1 "F002.png"
	setcycle 1 image_file2 "F005.png"
	setcycle 2 instruction_txt "Which image would you like to have in your living room at home?"
	setcycle 2 image_file1 "F003.png"
	setcycle 2 image_file2 "F006.png"
	setcycle 3 instruction_txt "Detect the prettiest element in the picture."
	setcycle 3 image_file1 "F004.png"
	setcycle 3 image_file2 "F007.png"
	setcycle 4 instruction_txt "Do you remember one of those images from before?"
	setcycle 4 image_file1 "F005.png"
	setcycle 4 image_file2 "F008.png"
	setcycle 5 instruction_txt "Think about how this images could be combined."
	setcycle 5 image_file1 "F006.png"
	setcycle 5 image_file2 "F001.png"
	setcycle 6 instruction_txt "If a dog were to hide in one this images which side would he choose?"
	setcycle 6 image_file1 "F007.png"
	setcycle 6 image_file2 "F002.png"
	setcycle 7 instruction_txt "How would you rate the artists' skill level?"
	setcycle 7 image_file1 "F008.png"
	setcycle 7 image_file2 "F004.png"
	run new_sequence

define sequence trial_sequence
	set flush_keyboard yes
	set description "Führt eine Anzahl von Elementen in einer Sequenz aus"
	run fixation_pygaze_log True
	run fixation_point_inline_script True
	run image_pygaze_log True
	run image_inline_script True
	run new_sketchpad True
	run image_inline_script_old True disabled
	run logger True

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Stimuli anzeigen"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="Welcome to our Eye Tracking Experiment. <br />" x=0 y=0 z_index=0

