---
API: 3
OpenSesame: 4.0.24
Platform: nt
---
set width 1920
set title "Attentional spatial bias"
set subject_parity even
set subject_nr 0
set start full_experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:\\Users\\juli8\\Downloads"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#3d3846"

define pygaze_init calibration
	set tracker_type "Advanced dummy (mouse simulation)"
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initializes and calibrates the eye tracker"
	set calibrate yes
	set calbeep yes
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define sketchpad exit
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="Thank you for participating at our Eye Tracking Experiment." x=0 y=0 z_index=0

define sequence first_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_pygaze_log True
	run fixation_point_inline_script True
	run image_pygaze_log True
	run image_inline_script True

define loop first_trial_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 condition normal
	setcycle 0 trial_number 1
	setcycle 1 condition normal
	setcycle 1 trial_number 2
	setcycle 2 condition normal
	setcycle 2 trial_number 3
	setcycle 3 condition normal
	setcycle 3 trial_number 4
	setcycle 4 condition normal
	setcycle 4 trial_number 5
	setcycle 5 condition normal
	setcycle 5 trial_number 6
	setcycle 6 condition normal
	setcycle 6 trial_number 7
	setcycle 7 condition normal
	setcycle 7 trial_number 8
	setcycle 8 condition normal
	setcycle 8 trial_number 9
	setcycle 9 condition size
	setcycle 9 trial_number 10
	setcycle 10 condition size
	setcycle 10 trial_number 11
	setcycle 11 condition size
	setcycle 11 trial_number 12
	setcycle 12 condition size
	setcycle 12 trial_number 13
	setcycle 13 condition size
	setcycle 13 trial_number 14
	setcycle 14 condition size
	setcycle 14 trial_number 15
	setcycle 15 condition size
	setcycle 15 trial_number 16
	setcycle 16 condition size
	setcycle 16 trial_number 17
	setcycle 17 condition size
	setcycle 17 trial_number 18
	setcycle 18 condition form
	setcycle 18 trial_number 19
	setcycle 19 condition form
	setcycle 19 trial_number 20
	setcycle 20 condition form
	setcycle 20 trial_number 21
	setcycle 21 condition form
	setcycle 21 trial_number 22
	setcycle 22 condition form
	setcycle 22 trial_number 23
	setcycle 23 condition form
	setcycle 23 trial_number 24
	setcycle 24 condition form
	setcycle 24 trial_number 25
	setcycle 25 condition form
	setcycle 25 trial_number 26
	setcycle 26 condition form
	setcycle 26 trial_number 27
	setcycle 27 condition background
	setcycle 27 trial_number 28
	setcycle 28 condition background
	setcycle 28 trial_number 29
	setcycle 29 condition background
	setcycle 29 trial_number 30
	setcycle 30 condition background
	setcycle 30 trial_number 31
	setcycle 31 condition background
	setcycle 31 trial_number 32
	setcycle 32 condition background
	setcycle 32 trial_number 33
	setcycle 33 condition background
	setcycle 33 trial_number 34
	setcycle 34 condition background
	setcycle 34 trial_number 35
	setcycle 35 condition background
	setcycle 35 trial_number 36
	run first_sequence

define inline_script fixation_point_inline_script
	set description "Executes Python code"
	___run__
	import math
	
	timeout = 10000
	required_fixation_time = 2000
	center = (var.width//2, var.height//2)
	print('center: ', center)
	
	# Show fixation cross
	canvas = Canvas()
	canvas.fixdot()
	canvas.show()
	
	# Wait for the fixation on the fixation cross
	t0 = clock.time()
	fixated = False
	initial_fixation_time = -1
	currently_fixated = False
	while not fixated and clock.time() - t0 < timeout:
	    x, y = eyetracker.sample()
	    dist = math.sqrt((x - center[0])**2 + (y - center[1])**2)
	    if dist < 100 and not currently_fixated:
	        initial_fixation_time = clock.time()
	        currently_fixated = True
	    if currently_fixated:
	        if dist < 100 and clock.time() - initial_fixation_time > required_fixation_time:
	            fixated = True
	        if dist > 100:
	            currently_fixated = False
	    
	# Calibrate eye tracker if subject was not able to fixate the point 
	if not fixated:
	        eyetracker.calibrate()
	__end__
	set _prepare ""

define pygaze_log fixation_pygaze_log
	set throttle 10
	set msg fixation_log
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define sequence full_experiment
	set flush_keyboard yes
	set description "Führt eine Anzahl von Elementen in einer Sequenz aus"
	run welcome True
	run calibration True
	run instructions True
	run pygaze_start_recording True
	run first_trial_loop True
	run pygaze_stop_recording True
	run logger True
	run exit True

define inline_script image_inline_script
	set description "Executes Python code"
	___run__
	import random
	from PIL import Image, ImageDraw
	import os
	
	def get_dominant_color(image_path):
	    image = Image.open(image_path).convert('RGB')
	    image = image.resize((50, 50))  # Speed up by resizing
	    pixels = list(image.getdata())
	    avg_color = tuple(sum(c) // len(c) for c in zip(*pixels))
	    return avg_color
	
	def get_complementary_color(rgb):
	    r, g, b = rgb
	    return (255 - r, 255 - g, 255 - b)
	
	def apply_asymmetric_mask_and_save(input_path, output_path):
	    im = Image.open(input_path).convert("RGBA")
	    width, height = im.size
	
	    mask = Image.new('L', (width, height), 0)
	    draw = ImageDraw.Draw(mask)
	
	    # Starte mit einem großen Rechteck (z. B. 75–85 % des Bildes)
	    margin_x = random.randint(int(width * 0.05), int(width * 0.15))
	    margin_y = random.randint(int(height * 0.05), int(height * 0.15))
	
	    # Erzeuge eine verzerrte Rechteckform
	    polygon = [
	        (margin_x + random.randint(-20, 20), margin_y + random.randint(-20, 20)),
	        (width - margin_x + random.randint(-20, 20), margin_y + random.randint(-20, 20)),
	        (width - margin_x + random.randint(-20, 20), height - margin_y + random.randint(-20, 20)),
	        (margin_x + random.randint(-20, 20), height - margin_y + random.randint(-20, 20)),
	    ]
	
	    draw.polygon(polygon, fill=255)
	    im.putalpha(mask)
	    im.save(output_path)
	
	# Hauptlogik
	filenames = [f for f in self.experiment.pool.files()]
	
	# Zwei zufällige Bilder auswählen
	img_left, img_right = random.sample(filenames, 2)
	
	# Speichern in Variablen
	var.img_left = img_left
	var.img_right = img_right
	
	# Canvas erstellen
	canvas = Canvas()
	
	# NEU: Wahrscheinlichkeit für Dreiecke (hier 60%)
	TRIANGLE_PROBABILITY = 0.6
	
	# NEU: Universelle Dreiecksfunktion mit Wahrscheinlichkeit
	def draw_universal_triangle(canvas, img_path, x_offset, scale=0.5, is_asym=False):
	    try:
	        # Nur mit TRIANGLE_PROBABILITY Wahrscheinlichkeit zeichnen
	        if random.random() > TRIANGLE_PROBABILITY:
	            return
	            
	        with Image.open(pool[img_path]) as img:
	            orig_w, orig_h = img.size
	        
	        disp_w = orig_w * scale
	        disp_h = orig_h * scale
	        
	        tri_h, tri_w = 2, 3
	        
	        safe_ratio = 0.6 if is_asym else 0.8
	        safe_w = disp_w * safe_ratio
	        safe_h = disp_h * safe_ratio
	        
	        min_size = max(tri_w, tri_h) * 3
	        safe_w = max(safe_w, min_size)
	        safe_h = max(safe_h, min_size)
	        
	        x = random.uniform(x_offset - safe_w/2 + tri_w, x_offset + safe_w/2 - tri_w)
	        y = random.uniform(-safe_h/2 + tri_h, safe_h/2 - tri_h)
	        
	        canvas.polygon([
	            (x, y - tri_h),
	            (x - tri_w/2, y),
	            (x + tri_w/2, y)
	        ], fill=True, color='red')
	    except:
	        pass
	
	if condition == "normal":
	    canvas.image(pool[var.img_left], scale=0.5, x=-384, y=0)
	    canvas.image(pool[var.img_right], scale=0.5, x=384, y=0)
	    draw_universal_triangle(canvas, var.img_left, -384)
	    draw_universal_triangle(canvas, var.img_right, 384)
	
	elif condition == "size":
	    index_for_05 = random.choice([0, 1])
	    scales = [None, None]
	    scales[index_for_05] = 0.5
	    other_index = 1 - index_for_05
	    scales[other_index] = random.choice([0.25, 0.75])
	    canvas.image(pool[var.img_left], scale=scales[0], x=-384, y=0)
	    canvas.image(pool[var.img_right], scale=scales[1], x=384, y=0)
	    draw_universal_triangle(canvas, var.img_left, -384, scales[0])
	    draw_universal_triangle(canvas, var.img_right, 384, scales[1])
	
	elif condition == "form":
	    asym_on_left = random.choice([True, False])
	    if asym_on_left:
	        asym_path = os.path.join(self.experiment.experiment_path, "asym_left.png")
	        apply_asymmetric_mask_and_save(pool[var.img_left], asym_path)
	        canvas.image(asym_path, scale=0.5, x=-384, y=0)
	        canvas.image(pool[var.img_right], scale=0.5, x=384, y=0)
	        draw_universal_triangle(canvas, var.img_left, -384, 0.5, True)
	        draw_universal_triangle(canvas, var.img_right, 384)
	    else:
	        asym_path = os.path.join(self.experiment.experiment_path, "asym_right.png")
	        apply_asymmetric_mask_and_save(pool[var.img_right], asym_path)
	        canvas.image(pool[var.img_left], scale=0.5, x=-384, y=0)
	        canvas.image(asym_path, scale=0.5, x=384, y=0)
	        draw_universal_triangle(canvas, var.img_left, -384)
	        draw_universal_triangle(canvas, var.img_right, 384, 0.5, True)
	
	elif condition == "background":
	    img_left_path = pool[var.img_left]
	    img_right_path = pool[var.img_right]
	    dominant_left = get_dominant_color(img_left_path)
	    dominant_right = get_dominant_color(img_right_path)
	    random_bg = random.choice([dominant_left, dominant_right])
	    bg_color = get_complementary_color(random_bg)
	    canvas.rect(x=-960, y=-600, w=1920, h=1200, fill=True, color=bg_color)
	    canvas.image(pool[var.img_left], scale=0.5, x=-384, y=0)
	    canvas.image(pool[var.img_right], scale=0.5, x=384, y=0)
	    draw_universal_triangle(canvas, var.img_left, -384)
	    draw_universal_triangle(canvas, var.img_right, 384)
	
	# Anzeigen für 7 Sekunden
	canvas.show()
	clock.sleep(7000)
	__end__
	set _prepare ""

define pygaze_log image_pygaze_log
	set throttle 10
	set msg image_log
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define sketchpad instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=42 html=yes show_if=True text="Welcome to the experiment.<br />Please have a look on all of the images." x=0 y=0 z_index=0

define logger logger
	set description "Protokolliert experimentelle Daten"
	set auto_log yes

define pygaze_start_recording pygaze_start_recording
	set status_msg start_trial
	set description ""

define pygaze_stop_recording pygaze_stop_recording
	set status_msg stop_trial
	set description ""

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Stimuli anzeigen"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="Welcome to our Eye Tracking Experiment. <br />" x=0 y=0 z_index=0

